pre = "Green";
post = "Red";
POI = "Blue";

//problem is currently that there isn't a great way of selecting what to open and what to spell out
//when there's a variable chance of a file existing and if the other two don't exist, it can't
//triple coloc.
//scream

resultdir = getDirectory("for ROI");
folderlist=getFileList(resultdir);
resultstring = "title	#overlapped	2channelOverlapped	Area	precount	postcount	POIcount\n";
resultstring = resultstring+"pre:	"+pre+"	post:	"+post+"	POI:	"+POI+"\n";
print("title	#overlapped	2channelOverlapped	Area	precount	postcount	POIcount");
print("pre:	"+pre+"	post:	"+post+"	POI:	"+POI);
for(x=0;x<folderlist.length;x++){
	filelist=getFileList(resultdir+folderlist[x]);
	//foldername = File.getName(resultdir+folderlist[x]);
	resultstring = resultstring+folderlist[x]+"\n";
	lastTitle = "temp";
	if(File.isDirectory(resultdir+folderlist[x])==1){
		print(folderlist[x]);
		for(p=0;p<filelist.length;p++){
			if(endsWith(File.getName(resultdir+folderlist[x]+filelist[p]), "_ROI.zip")==1){
				precount = 0;
				postcount = 0;
				POIcount = 0;
				area = 0;
				finalCount = 0;
				zipexists = 0;
				doublecount = 0;

				name = File.getName(resultdir+folderlist[x]+filelist[p]);

				index = indexOf(name,".tif");
				title =  substring(name, 0,(index+4));
				if(title == lastTitle){
					for(g=0;g<6;g++){
						v=0;
						if(substring(File.getName(resultdir+folderlist[x]+filelist[p]), 0,(index+4))==title){
							v++;
						}
						if((p+v)<filelist.length){
							p=p+v;
						}
					}
				}
				else{
					exists1 = 0;
					exists2 = 0;
					exists3 = 0;

					if(File.exists(resultdir+folderlist[x]+title+"_"+POI+"_ROI.zip")==1){
						index = indexOf(File.getName(resultdir+folderlist[x]+title+"_"+POI+"_ROI.zip"),"_"+POI+"_ROI.zip");							
						title =  substring(File.getName(resultdir+folderlist[x]+title+"_"+POI+"_ROI.zip"), 0,index);
						exists1 = 1;
					}
					if(File.exists(resultdir+folderlist[x]+title+"_"+post+"_ROI.zip")==1){
						index = indexOf(File.getName(resultdir+folderlist[x]+title+"_"+post+"_ROI.zip"),"_"+post+"_ROI.zip");
						title =  substring(File.getName(resultdir+folderlist[x]+title+"_"+post+"_ROI.zip"), 0,index);
						exists2 = 6;
					}
					if(File.exists(resultdir+folderlist[x]+title+"_"+pre+"_ROI.zip")==1){
						index = indexOf(File.getName(resultdir+folderlist[x]+title+"_"+pre+"_ROI.zip"),"_"+pre+"_ROI.zip");
						title =  substring(File.getName(resultdir+folderlist[x]+title+"_"+pre+"_ROI.zip"), 0,index);
						exists3 = 12;
					}
					
					zipexists = exists1+exists2+exists3;
		
					lastTitle = title;
					
					if(zipexists == 0){
						print(title+"	"+finalCount+"	"+doublecount+"	"+area+"	"+precount+"	"+postcount+"	"+POIcount);
						resultstring = resultstring+title+"	"+finalCount+"	"+doublecount+"	"+area+"	"+precount+"	"+postcount+"	"+POIcount+"\n";
						
					}
					if(zipexists == 1){
						roiManager("reset");
						run("Clear Results");
						roiManager("Open", resultdir+folderlist[x]+title+"_"+POI+"_ROI.zip");
						POIcount = roiManager("Count");
						print(title+"	"+finalCount+"	"+doublecount+"	"+area+"	"+precount+"	"+postcount+"	"+POIcount);
						resultstring = resultstring+title+"	"+finalCount+"	"+doublecount+"	"+area+"	"+precount+"	"+postcount+"	"+POIcount+"\n";
					}
					if(zipexists == 6){
						roiManager("reset");
						run("Clear Results");
						roiManager("Open", resultdir+folderlist[x]+title+"_"+post+"_ROI.zip");
						postcount = roiManager("Count");
						print(title+"	"+finalCount+"	"+doublecount+"	"+area+"	"+precount+"	"+postcount+"	"+POIcount);
						resultstring = resultstring+title+"	"+finalCount+"	"+doublecount+"	"+area+"	"+precount+"	"+postcount+"	"+POIcount+"\n";
					}
					if(zipexists == 12){
						roiManager("reset");
						run("Clear Results");
						roiManager("Open", resultdir+folderlist[x]+title+"_"+pre+"_ROI.zip");
						precount = roiManager("Count");
						print(title+"	"+finalCount+"	"+doublecount+"	"+area+"	"+precount+"	"+postcount+"	"+POIcount);
						resultstring = resultstring+title+"	"+finalCount+"	"+doublecount+"	"+area+"	"+precount+"	"+postcount+"	"+POIcount+"\n";				
					}
					if(zipexists == 13){
						roiManager("reset");
						run("Clear Results");
						roiManager("Open", resultdir+folderlist[x]+title+"_"+POI+"_ROI.zip");
						roiManager("show all without labels");
						open(resultdir+folderlist[x]+title+"_"+POI+"_mask.tif");
						ROI = newArray();
						POIcount = roiManager("Count");
						for(n=0;n<roiManager("Count");n++){
							ROI = Array.concat(ROI,n);
						}
						if(roiManager("Count")>1){
							roiManager("Select", ROI);
							roiManager("Combine");
							roiManager("Add");
							for(n=0;n<roiManager("Count")-1;n++){
								roiManager("Select", n);
								roiManager("Delete");
							}
							roiManager("Open", resultdir+folderlist[x]+title+"_"+pre+"_ROI.zip");
							roiManager("show all without labels");
							precount = (roiManager("Count")-1);
							ROI = newArray();
							if(roiManager("Count")>2){
								for(n=1;n<roiManager("Count");n++){
									ROI = Array.concat(ROI,n);
								}
								roiManager("Select", ROI);
								roiManager("Combine");
								roiManager("Add");
								for(n=1;n<roiManager("Count")-1;n++){
									roiManager("Select", n);
									roiManager("Delete");
								}
								roiManager("Select", newArray(0,1));
								roiManager("AND");
								if(selectionType() == 9 ){
									roiManager("Add");
									roiManager("Select", newArray(0,1));
									roiManager("Delete");
								}
								roiManager("Split");
								roiManager("Select", 0);
								roiManager("Delete");
								ROI = newArray();
								for(n=0;n<roiManager("Count");n++){
									ROI = Array.concat(ROI,n);
								}
								roiManager("Select", ROI);
								roiManager("Measure");
								doublecount = nResults;
							}
							selectImage(title+"_"+POI+"_mask.tif");
						}
						close();
						print(title+"	"+finalCount+"	"+doublecount+"	"+area+"	"+precount+"	"+postcount+"	"+POIcount);
						resultstring = resultstring+title+"	"+finalCount+"	"+doublecount+"	"+area+"	"+precount+"	"+postcount+"	"+POIcount+"\n";
					}
					if(zipexists == 7){
						roiManager("reset");
						run("Clear Results");
						roiManager("Open", resultdir+folderlist[x]+title+"_"+POI+"_ROI.zip");
						roiManager("show all without labels");
						open(resultdir+folderlist[x]+title+"_"+POI+"_mask.tif");
						ROI = newArray();
						POIcount = roiManager("Count");
						for(n=0;n<roiManager("Count");n++){
							ROI = Array.concat(ROI,n);
						}
						if(roiManager("Count")>1){
							roiManager("Select", ROI);
							roiManager("Combine");
							roiManager("Add");
							for(n=0;n<roiManager("Count")-1;n++){
								roiManager("Select", n);
								roiManager("Delete");
							}
							roiManager("Open", resultdir+folderlist[x]+title+"_"+post+"_ROI.zip");
							roiManager("show all without labels");
							postcount = (roiManager("Count")-1);
							ROI = newArray();
							if(roiManager("Count")>2){
								for(n=1;n<roiManager("Count");n++){
									ROI = Array.concat(ROI,n);
								}
								roiManager("Select", ROI);
								roiManager("Combine");
								roiManager("Add");
								for(n=1;n<roiManager("Count")-1;n++){
									roiManager("Select", n);
									roiManager("Delete");
								}
								roiManager("Select", newArray(0,1));
								roiManager("AND");
								if(selectionType() == 9 ){
									roiManager("Add");
									roiManager("Select", newArray(0,1));
									roiManager("Delete");
								}
								roiManager("Split");
								roiManager("Select", 0);
								roiManager("Delete");
								ROI = newArray();
								for(n=0;n<roiManager("Count");n++){
									ROI = Array.concat(ROI,n);
								}
								roiManager("Select", ROI);
								roiManager("Measure");
								doublecount = nResults;
							}
							print(title+"	"+finalCount+"	"+doublecount+"	"+area+"	"+precount+"	"+postcount+"	"+POIcount);
							resultstring = resultstring+title+"	"+finalCount+"	"+doublecount+"	"+area+"	"+precount+"	"+postcount+"	"+POIcount+"\n";
						}
						selectImage(title+"_"+POI+"_mask.tif");
						close();
					}
					if(zipexists == 18){
						roiManager("reset");
						run("Clear Results");
						roiManager("Open", resultdir+folderlist[x]+title+"_"+post+"_ROI.zip");
						roiManager("show all without labels");
						open(resultdir+folderlist[x]+title+"_"+post+"_mask.tif");
						ROI = newArray();
						postcount = roiManager("Count");
						for(n=0;n<roiManager("Count");n++){
							ROI = Array.concat(ROI,n);
						}
						if(roiManager("Count")>1){
							roiManager("Select", ROI);
							roiManager("Combine");
							roiManager("Add");
							for(n=0;n<roiManager("Count")-1;n++){
								roiManager("Select", n);
								roiManager("Delete");
							}
							roiManager("Open", resultdir+folderlist[x]+title+"_"+pre+"_ROI.zip");
							roiManager("show all without labels");
							precount = (roiManager("Count")-1);
							ROI = newArray();
							if(roiManager("Count")>2){
								for(n=1;n<roiManager("Count");n++){
									ROI = Array.concat(ROI,n);
								}
								roiManager("Select", ROI);
								roiManager("Combine");
								roiManager("Add");
								for(n=1;n<roiManager("Count")-1;n++){
									roiManager("Select", n);
									roiManager("Delete");
								}
								roiManager("Select", newArray(0,1));
								roiManager("AND");
								if(selectionType() == 9 ){
									roiManager("Add");
									roiManager("Select", newArray(0,1));
									roiManager("Delete");
								}
								roiManager("Split");
								roiManager("Select", 0);
								roiManager("Delete");
								ROI = newArray();
								for(n=0;n<roiManager("Count");n++){
									ROI = Array.concat(ROI,n);
								}
								roiManager("Select", ROI);
								roiManager("Measure");
								doublecount = nResults;
							}
							print(title+"	"+finalCount+"	"+doublecount+"	"+area+"	"+precount+"	"+postcount+"	"+POIcount);
							resultstring = resultstring+title+"	"+finalCount+"	"+doublecount+"	"+area+"	"+precount+"	"+postcount+"	"+POIcount+"\n";
						}
						selectImage(title+"_"+post+"_mask.tif");
						close();
						}
			
					if(zipexists==19){
						roiManager("reset");
						run("Clear Results");
						roiManager("Open", resultdir+folderlist[x]+title+"_"+pre+"_ROI.zip");
						roiManager("show all without labels");
						open(resultdir+folderlist[x]+title+"_"+pre+"_mask.tif");
						ROI = newArray();
						precount = roiManager("Count");
						for(n=0;n<roiManager("Count");n++){
							ROI = Array.concat(ROI,n);
						}
						if(roiManager("Count")>1){
							roiManager("Select", ROI);
							roiManager("Combine");
							roiManager("Add");
							for(n=0;n<roiManager("Count")-1;n++){
								roiManager("Select", n);
								roiManager("Delete");
							}
							roiManager("Open", resultdir+folderlist[x]+title+"_"+post+"_ROI.zip");
							roiManager("show all without labels");
							postcount = (roiManager("Count")-1);
							ROI = newArray();
							if(roiManager("Count")>2){
								for(n=1;n<roiManager("Count");n++){
									ROI = Array.concat(ROI,n);
								}
								roiManager("Select", ROI);
								roiManager("Combine");
								roiManager("Add");
								for(n=2;n<roiManager("Count");n++){
									roiManager("Select", n);
									roiManager("Delete");
								}
								roiManager("Select", newArray(0,1));
								roiManager("AND");
								if(selectionType() == 9 ){
									roiManager("Add");
									roiManager("Select", newArray(0,1));
									roiManager("Delete");
									roiManager("Open", resultdir+folderlist[x]+title+"_"+POI+"_ROI.zip");
									roiManager("show all without labels");
									POIcount = (roiManager("Count")-1);
									ROI = newArray();
									for(n=1;n<(roiManager("Count"));n++){
										ROI = Array.concat(ROI,n);
									}
									roiManager("Select", ROI);
									roiManager("Combine");
									roiManager("Add");
									for(n=1;n<(roiManager("Count")-1);n++){
										roiManager("Select", n);
										roiManager("Delete");
									}
									roiManager("Select", newArray(0,1));
									roiManager("AND");
									if(selectionType() == 9 ){
										roiManager("Add");
										roiManager("Select", newArray(0,1));
										roiManager("Delete");
										roiManager("Select", 0);
										roiManager("Split");
										ROI = newArray();
										for(n=1;n<roiManager("Count");n++){
											ROI = Array.concat(ROI,n);
										}
										roiManager("Select", ROI);
										roiManager("Measure");
										roiManager("Select", 0);
										roiManager("Delete");
										for(t=0;t<nResults;t++){
											area = area+getResult("Area",t);
										}
										area = area/nResults;
										finalCount = nResults;
									
										print(title+"	"+finalCount+"	"+doublecount+"	"+area+"	"+precount+"	"+postcount+"	"+POIcount);
										resultstring = resultstring+title+"	"+finalCount+"	"+doublecount+"	"+area+"	"+precount+"	"+postcount+"	"+POIcount+"\n";
										selectImage(title+"_"+pre+"_mask.tif");
										close();
									}
									else{
										print(title+"	"+finalCount+"	"+doublecount+"	"+area+"	"+precount+"	"+postcount+"	"+POIcount);
										resultstring = resultstring+title+"	"+finalCount+"	"+doublecount+"	"+area+"	"+precount+"	"+postcount+"	"+POIcount+"\n";
										roiManager("reset");
										run("Clear Results");
										selectImage(title+"_"+pre+"_mask.tif");
										close();
									}
								}
								else{
									print(title+"	"+finalCount+"	"+doublecount+"	"+area+"	"+precount+"	"+postcount+"	"+POIcount);
									resultstring = resultstring+title+"	"+finalCount+"	"+doublecount+"	"+area+"	"+precount+"	"+postcount+"	"+POIcount+"\n";
									roiManager("reset");
									run("Clear Results");
									selectImage(title+"_"+pre+"_mask.tif");
									close();
								}
							}
							else{
								print(title+"	"+finalCount+"	"+doublecount+"	"+area+"	"+precount+"	"+postcount+"	"+POIcount);
								resultstring = resultstring+title+"	"+finalCount+"	"+doublecount+"	"+area+"	"+precount+"	"+postcount+"	"+POIcount+"\n";
								roiManager("reset");
								run("Clear Results");
								selectImage(title+"_"+pre+"_mask.tif");
								close();
							}
						}
						else{
							print(title+"	"+finalCount+"	"+doublecount+"	"+area+"	"+precount+"	"+postcount+"	"+POIcount);
							resultstring = resultstring+title+"	"+finalCount+"	"+doublecount+"	"+area+"	"+precount+"	"+postcount+"	"+POIcount+"\n";
							roiManager("reset");
							run("Clear Results");
							selectImage(title+"_"+pre+"_mask.tif");
							close();
						}
					}
					else{
						roiManager("reset");
						run("Clear Results");
					}
				}
			}
			else{
			}
		}
	}
}
File.saveString(resultstring,resultdir+"TripleColocAreaOverlap.xls");
